<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>22637872</spk:SerialNumber>
          <spk:ColorProcessing>NoColorProcessing</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\videotest</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>true</cv:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>FrameID</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>\bottom_cam_sync.csv</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>basepath</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Z:\Isabel\data\acquisition\test\bottom_cam_sync.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Z:\Isabel\data\acquisition\test</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>basepath</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>basepath</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>import os

@returns(bool)
def process(path):
  fname = os.path.join(path, "bottom_cam.avi")
  pipename = r'\\.\pipe\videotest'

  '''
  The parameters below are arguments for ffmpeg to enable it to interpret the incoming camera data
  and to tell it what to do with the data.

  Arguments before the input (-i : in this case the pipe) apply to the input.
    These params should not need to be changed:
    -vcodec : which video decoder to use
      rawvideo tells ffmpeg it is decoding a raw video stream

    Update these params to match the camera settings:
    -s : image dimensions
    -r : frame rate
    -pix_fmt : pixel format

  Arguments before the output (fname : the video file) apply to the output.
    These params should not need to be changed:
    -vcodec : which video encoder to use, determines how ffmpeg will compress the file
      libx264 is fine for the bottom camera
      h264_nvenc engages the NVidia GPU
    -preset : defines the encoding speed to compression ratio
      fast is one notch higher than medium and far from the fastest option
      slower results in better compression quality, but probably there is a tradeoff with frame acquisition?
    -qp : 
  '''

  os.system(str.format(r'ffmpeg -y -f rawvideo -vcodec rawvideo -s 1600x1600 -r 25 -pix_fmt gray8 -i {0} -vcodec libx264 -preset fast -qp 23 {1}', pipename, fname))  
  #os.system(str.format(r'ffmpeg -y -f rawvideo -vcodec rawvideo -s 2048x2048 -r 30 -pix_fmt gray8 -i {0} -vcodec libx264 -preset fast -qp 18 {1}', pipename, fname)) # SC bottom cam
  #os.system(str.format(r'ffmpeg -y -f rawvideo -vcodec rawvideo -s 2800x1400 -r 60 -pix_fmt gray8 -i {0} -vcodec h264_nvenc -preset fast -rc constqp -qp 18 {1}',pipename,fname))
  #os.system(str.format(r'ffmpeg -y -f rawvideo -vcodec rawvideo -s 2048x2048 -r 30 -pix_fmt gray8 -i {0} -vcodec libx264 -preset medium -crf 18 {1}',pipename,fname))
  #os.system(str.format(r'ffmpeg -y -f rawvideo -vcodec rawvideo -s 2800x1400 -r 60 -pix_fmt gray8 -i {0} -vcodec mpeg4 -qscale:v 3 {1}',pipename,fname))
  return True</ipy:Script>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="12" Label="Source1" />
      <Edge From="7" To="9" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>